<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0">
    
	<!-- Description of Device -->
	<DeviceSet 
      Name="PlusServer: NDI Aurora trackers and Epiphan Frame Grabber"
      Description="Broadcasting tool tracking data and US Image data through OpenIGTLink.
      Tracking three 6DOF EM trackers (080061) and using Ultrasonix US machine." />

	<!-- Aurora Tracker Device Definition -->
	<Device
      Id="EmTracker" 
      Type="AuroraTracker"
      SerialPort="5" 
      BaudRate="115200"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0.0"
      ToolReferenceFrame="EmTracker" > <!-- SerialPort = COM port number (check "Device Manager/Ports") -->
      <DataSources>
        <DataSource 
			Type="Tool" 
			Id="Reference" 
			RomFile="DDRO-080-061-01_GENERIC.rom"
			BufferSize="500"
			AveragedItemsForFiltering="20"
			PortName="0" 
		/> <!-- PortName relates to physical port 1 -->
		<DataSource 
			Type="Tool" 
			Id="US_Probe" 
			RomFile="DDRO-080-061-01_GENERIC.rom"
			BufferSize="500"
			AveragedItemsForFiltering="20"
			PortName="1" 
		/> <!-- PortName relates to physical port 2 -->
		<DataSource 
			Type="Tool" 
			Id="Needle_Base" 
			RomFile="DDRO-080-061-01_GENERIC.rom"
			BufferSize="500"
			AveragedItemsForFiltering="20"
			PortName="2" 
		/> <!-- PortName relates to physical port 3 -->
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="EmTrackerStream">
          <DataSource Id="Reference" />
		  <DataSource Id="US_Probe" />
		  <DataSource Id="Needle_Base" />
        </OutputChannel>
      </OutputChannels>
    </Device>
	
	<!-- Epiphan Frame Grabber Device Definition -->
    <Device
      Id="VideoDevice" 
      Type="Epiphan" >
      <DataSources>
        <DataSource 
			Id="US_Image" 
			Type="Video" 
			PortUsImageOrientation="UN"  
			ImageType = "BRIGHTNESS"
			ClipRectangleOrigin = "366 107"
			ClipRectangleSize = "395 783"
			BaseFilename="RecordingTest.igs.mha"
			EnableCapturingOnStart="FALSE" >
		/>
      </DataSources>      
      <OutputChannels>
        <OutputChannel 
			Id="VideoStream" 
			VideoDataSourceId="US_Image" />
      </OutputChannels>
    </Device>
	
	<!-- Mixing the position sensors and image data -->
	<Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="EmTrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
	
  </DataCollection>
  
  <!-- Transformations for sensors and US Image -->
  <CoordinateDefinitions>
    <Transform From="Image" To="US_Probe"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
	
	<Transform From="Needle_Tip" To="Needle_Base"
      Matrix="
        1 0 0.000203823 0.0180449
        3.31529e-09 -1  -1.62655e-05  -0.00144002
        0.000203823 1.62655e-05 -1  -88.5321
        0 0 0 1"
       Error="0.554951" Date="012617_105449" />
	   
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackedVideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
		<Message Type="IMAGE" />
      </MessageTypes>
      <TransformNames> 
        <!-- Transform to ToolReferenceFrame -->
		<Transform Name="ReferenceToEmTracker" />
        <Transform Name="US_ProbeToEmTracker" />
        <Transform Name="Needle_BaseToEmTracker" />    
		<!-- Transform between reference sensor and other sensors -->
		<Transform Name="US_ProbeToReference" /> 
		<Transform Name="Needle_BaseToReference" /> 
		<Transform Name="Needle_TipToReference" /> 
		<Transform Name="Needle_TipToNeedle_Base" /> 
      </TransformNames>
	  <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>