<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0">
	<DeviceSet 
      Name="PlusServer: Epiphan video capture device"
      Description="Broadcasting acquired video through OpenIGTLink"
    />
	
    <Device
      Id="VideoDevice" 
      Type="Epiphan" >
      <DataSources>
        <DataSource 
			Id="US_Image" 
			Type="Video" 
			PortUsImageOrientation="UN"  
			ImageType = "BRIGHTNESS"
			ClipRectangleOrigin = "366 107"
			ClipRectangleSize = "395 783"
		/>
      </DataSources>      
      <OutputChannels>
        <OutputChannel 
			Id="VideoStream" 
			VideoDataSourceId="US_Image" />
      </OutputChannels>
    </Device>
	
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>
  
  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>